<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Sockets.Bonsai;assembly=OpenEphys.Sockets.Bonsai"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:NeuracleExtension;assembly=OpenEphys.Onix1"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TcpServer">
          <p1:Name>Tcp1</p1:Name>
          <p1:Port>9001</p1:Port>
          <p1:Address>localhost</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TcpServer">
          <p1:Name>Tcp2</p1:Name>
          <p1:Port>9002</p1:Port>
          <p1:Address>localhost</p1:Address>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>python</py:PythonHome>
          <py:ScriptPath>python\main.py</py:ScriptPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Eval">
          <py:Expression>set_channel(17)</py:Expression>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:NeuracleReadDataCache">
          <p2:CacheName>A</p2:CacheName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>data</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Eval">
          <py:Expression>run(data)</py:Expression>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:ObserveOnGIL" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Get">
          <py:VariableName>result</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:NeuracleSortingResult" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SendMatOverSocket">
          <p1:Connection>Tcp1</p1:Connection>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:NeuracleSimulationData">
          <p2:DeviceName>test</p2:DeviceName>
          <p2:BufferSize>3200</p2:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:NeuracleWriteToDataCache">
          <p2:CacheName>A</p2:CacheName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SendMatOverSocket">
          <p1:Connection>Tcp2</p1:Connection>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>